# OpenCARP Electrophysiology Configuration
# Generated by Cardiac Digital Twin Framework

# Simulation parameters
tend = 500.0
dt = 0.01

# Ionic model
imp_region[0].im = ten_tusscher_2006

# Tissue conductivities (mS/mm)
gregion[0].g_il = 0.17
gregion[0].g_it = 0.019
gregion[0].g_in = 0.019
gregion[0].g_el = 0.62
gregion[0].g_et = 0.24
gregion[0].g_en = 0.24

# Membrane parameters
Cm = 1.0
surfvolratio = 1400.0

# Stimulus
stimulus[0].stimtype = 0
stimulus[0].start = 0
stimulus[0].duration = 2.0
stimulus[0].strength = 52.0
stimulus[0].npls = 5
stimulus[0].bcl = 600

# Output
spacedt = 1.0
timedt = 1.0
